s:Sc/PhaseSpAtPhaseVol/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol/Surface                     = "PhaseVol/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol/OutputFile                  = "PhaseSpASCII"
i:Sc/PhaseSpAtPhaseVol/OutputBufferSize            = 1000
#s:Sc/PhaseSpAtPhaseVol/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol/OutputAfterRun              = "True"

s:Sc/PhaseSpAtPhaseVol2/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol2/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol2/Surface                     = "PhaseVol2/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol2/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol2/OutputFile                  = "PhaseSpASCII2"
i:Sc/PhaseSpAtPhaseVol2/OutputBufferSize            = 1000
#s:Sc/PhaseSpAtPhaseVol2/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol2/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol2/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol2/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol2/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol2/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol2/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol2/OutputAfterRun              = "True"


s:Ge/PhaseVol/Parent     = "World"
s:Ge/PhaseVol/Type       =  "TsBox"
s:Ge/PhaseVol/Material   = "Air"
d:Ge/PhaseVol/HLX        = .4 m
d:Ge/PhaseVol/HLY        = .4 m
d:Ge/PhaseVol/HLZ        = .05 cm
d:Ge/PhaseVol/TransX     = 0. m
d:Ge/PhaseVol/TransY     = 0. m
d:Ge/PhaseVol/TransZ     = 0.45 m
d:Ge/PhaseVol/RotX       = 0. deg
d:Ge/PhaseVol/RotY       = 0. deg
d:Ge/PhaseVol/RotZ       = 0. deg
s:Ge/PhaseVol/Color	  = "red"

s:Ge/PhaseVol2/Parent     = "World"
s:Ge/PhaseVol2/Type       =  "TsBox"
s:Ge/PhaseVol2/Material   = "G4_WATER" # "Air" # "G4_WATER"
d:Ge/PhaseVol2/HLX        = .4 m
d:Ge/PhaseVol2/HLY        = .4 m
d:Ge/PhaseVol2/HLZ        = .05 cm
d:Ge/PhaseVol2/TransX     = 0. m
d:Ge/PhaseVol2/TransY     = 0. m
d:Ge/PhaseVol2/TransZ     = -0.001 m
d:Ge/PhaseVol2/RotX       = 0. deg
d:Ge/PhaseVol2/RotY       = 0. deg
d:Ge/PhaseVol2/RotZ       = 0. deg
s:Ge/PhaseVol2/Color	  = "yellow"
