s:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/Surface                     = "PhaseVol_Zm0.001_0.001_1_R0_6_1/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/OutputFile                  = "PhaseSpASCII_Zm0.001_0.001_1_R0_6_1"
i:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/OutputBufferSize            = 1000
# s:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol_Zm0.001_0.001_1_R0_6_1/OutputAfterRun              = "True"
s:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/Parent     = "World"
s:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/Type       =  "TsCylinder"
s:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/Material   = "G4_WATER"
d:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/Rmin =  0 cm
d:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/Rmax = 6 cm
d:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/HL = 0.0005 cm
d:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/Sphi     = 0 deg
d:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/Dphi     = 360 deg
d:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/TransX   =  0 cm
d:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/TransY   =  0 cm
d:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/TransZ   =  0.0005 cm
d:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/RotX     = 0 deg
d:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/RotY     =  0 deg
d:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/RotZ     = 0 deg
s:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/Color    = "blue"
i:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/Zbins    =  1
i:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/Rbins    =  1
i:Ge/PhaseVol_Zm0.001_0.001_1_R0_6_1/PhiBins    =  1

s:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/Surface                     = "PhaseVol_Z0_0.4302_1_R0_6_1/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/OutputFile                  = "PhaseSpASCII_Z0_0.4302_1_R0_6_1"
i:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/OutputBufferSize            = 1000
# s:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol_Z0_0.4302_1_R0_6_1/OutputAfterRun              = "True"
s:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/Parent     = "World"
s:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/Type       =  "TsCylinder"
s:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/Material   = "G4_WATER"
d:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/Rmin =  0 cm
d:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/Rmax = 6 cm
d:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/HL = 0.2151 cm
d:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/Sphi     = 0 deg
d:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/Dphi     = 360 deg
d:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/TransX   =  0 cm
d:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/TransY   =  0 cm
d:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/TransZ   =  -0.2151 cm
d:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/RotX     = 0 deg
d:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/RotY     =  0 deg
d:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/RotZ     = 0 deg
s:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/Color    = "blue"
i:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/Zbins    =  1
i:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/Rbins    =  1
i:Ge/PhaseVol_Z0_0.4302_1_R0_6_1/PhiBins    =  1

s:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/Surface                     = "PhaseVol_Z0.4302_1.742_1_R0_6_1/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/OutputFile                  = "PhaseSpASCII_Z0.4302_1.742_1_R0_6_1"
i:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/OutputBufferSize            = 1000
# s:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol_Z0.4302_1.742_1_R0_6_1/OutputAfterRun              = "True"
s:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/Parent     = "World"
s:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/Type       =  "TsCylinder"
s:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/Material   = "G4_WATER"
d:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/Rmin =  0 cm
d:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/Rmax = 6 cm
d:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/HL = 0.871 cm
d:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/Sphi     = 0 deg
d:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/Dphi     = 360 deg
d:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/TransX   =  0 cm
d:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/TransY   =  0 cm
d:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/TransZ   =  -1.3012 cm
d:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/RotX     = 0 deg
d:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/RotY     =  0 deg
d:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/RotZ     = 0 deg
s:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/Color    = "blue"
i:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/Zbins    =  13
i:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/Rbins    =  1
i:Ge/PhaseVol_Z0.4302_1.742_1_R0_6_1/PhiBins    =  1

s:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/Surface                     = "PhaseVol_Z2.1722_0.5628_1_R0_6_1/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/OutputFile                  = "PhaseSpASCII_Z2.1722_0.5628_1_R0_6_1"
i:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/OutputBufferSize            = 1000
# s:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol_Z2.1722_0.5628_1_R0_6_1/OutputAfterRun              = "True"
s:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/Parent     = "World"
s:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/Type       =  "TsCylinder"
s:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/Material   = "G4_WATER"
d:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/Rmin =  0 cm
d:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/Rmax = 6 cm
d:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/HL = 0.2814 cm
d:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/Sphi     = 0 deg
d:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/Dphi     = 360 deg
d:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/TransX   =  0 cm
d:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/TransY   =  0 cm
d:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/TransZ   =  -2.4536 cm
d:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/RotX     = 0 deg
d:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/RotY     =  0 deg
d:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/RotZ     = 0 deg
s:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/Color    = "blue"
i:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/Zbins    =  21
i:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/Rbins    =  1
i:Ge/PhaseVol_Z2.1722_0.5628_1_R0_6_1/PhiBins    =  1

s:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/Surface                     = "PhaseVol_Z2.735_0.1742_1_R0_6_1/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/OutputFile                  = "PhaseSpASCII_Z2.735_0.1742_1_R0_6_1"
i:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/OutputBufferSize            = 1000
# s:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol_Z2.735_0.1742_1_R0_6_1/OutputAfterRun              = "True"
s:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/Parent     = "World"
s:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/Type       =  "TsCylinder"
s:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/Material   = "G4_WATER"
d:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/Rmin =  0 cm
d:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/Rmax = 6 cm
d:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/HL = 0.0871 cm
d:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/Sphi     = 0 deg
d:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/Dphi     = 360 deg
d:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/TransX   =  0 cm
d:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/TransY   =  0 cm
d:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/TransZ   =  -2.8221 cm
d:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/RotX     = 0 deg
d:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/RotY     =  0 deg
d:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/RotZ     = 0 deg
s:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/Color    = "blue"
i:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/Zbins    =  13
i:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/Rbins    =  1
i:Ge/PhaseVol_Z2.735_0.1742_1_R0_6_1/PhiBins    =  1

s:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/Surface                     = "PhaseVol_Z2.9092_0.059_1_R0_6_1/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/OutputFile                  = "PhaseSpASCII_Z2.9092_0.059_1_R0_6_1"
i:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/OutputBufferSize            = 1000
# s:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol_Z2.9092_0.059_1_R0_6_1/OutputAfterRun              = "True"
s:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/Parent     = "World"
s:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/Type       =  "TsCylinder"
s:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/Material   = "G4_WATER"
d:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/Rmin =  0 cm
d:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/Rmax = 6 cm
d:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/HL = 0.0295 cm
d:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/Sphi     = 0 deg
d:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/Dphi     = 360 deg
d:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/TransX   =  0 cm
d:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/TransY   =  0 cm
d:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/TransZ   =  -2.9387 cm
d:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/RotX     = 0 deg
d:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/RotY     =  0 deg
d:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/RotZ     = 0 deg
s:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/Color    = "blue"
i:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/Zbins    =  20
i:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/Rbins    =  1
i:Ge/PhaseVol_Z2.9092_0.059_1_R0_6_1/PhiBins    =  1

s:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/Surface                     = "PhaseVol_Z2.9682_0.0241_1_R0_6_1/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/OutputFile                  = "PhaseSpASCII_Z2.9682_0.0241_1_R0_6_1"
i:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/OutputBufferSize            = 1000
# s:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol_Z2.9682_0.0241_1_R0_6_1/OutputAfterRun              = "True"
s:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/Parent     = "World"
s:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/Type       =  "TsCylinder"
s:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/Material   = "G4_WATER"
d:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/Rmin =  0 cm
d:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/Rmax = 6 cm
d:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/HL = 0.01205 cm
d:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/Sphi     = 0 deg
d:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/Dphi     = 360 deg
d:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/TransX   =  0 cm
d:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/TransY   =  0 cm
d:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/TransZ   =  -2.98025 cm
d:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/RotX     = 0 deg
d:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/RotY     =  0 deg
d:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/RotZ     = 0 deg
s:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/Color    = "blue"
i:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/Zbins    =  20
i:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/Rbins    =  1
i:Ge/PhaseVol_Z2.9682_0.0241_1_R0_6_1/PhiBins    =  1

s:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/Surface                     = "PhaseVol_Z2.9923_0.0295_1_R0_6_1/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/OutputFile                  = "PhaseSpASCII_Z2.9923_0.0295_1_R0_6_1"
i:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/OutputBufferSize            = 1000
# s:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol_Z2.9923_0.0295_1_R0_6_1/OutputAfterRun              = "True"
s:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/Parent     = "World"
s:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/Type       =  "TsCylinder"
s:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/Material   = "G4_WATER"
d:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/Rmin =  0 cm
d:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/Rmax = 6 cm
d:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/HL = 0.01475 cm
d:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/Sphi     = 0 deg
d:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/Dphi     = 360 deg
d:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/TransX   =  0 cm
d:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/TransY   =  0 cm
d:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/TransZ   =  -3.00705 cm
d:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/RotX     = 0 deg
d:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/RotY     =  0 deg
d:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/RotZ     = 0 deg
s:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/Color    = "blue"
i:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/Zbins    =  10
i:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/Rbins    =  1
i:Ge/PhaseVol_Z2.9923_0.0295_1_R0_6_1/PhiBins    =  1

s:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/Surface                     = "PhaseVol_Z3.0218_0.1125_1_R0_6_1/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/OutputFile                  = "PhaseSpASCII_Z3.0218_0.1125_1_R0_6_1"
i:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/OutputBufferSize            = 1000
# s:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol_Z3.0218_0.1125_1_R0_6_1/OutputAfterRun              = "True"
s:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/Parent     = "World"
s:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/Type       =  "TsCylinder"
s:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/Material   = "G4_WATER"
d:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/Rmin =  0 cm
d:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/Rmax = 6 cm
d:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/HL = 0.05625 cm
d:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/Sphi     = 0 deg
d:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/Dphi     = 360 deg
d:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/TransX   =  0 cm
d:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/TransY   =  0 cm
d:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/TransZ   =  -3.07805 cm
d:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/RotX     = 0 deg
d:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/RotY     =  0 deg
d:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/RotZ     = 0 deg
s:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/Color    = "blue"
i:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/Zbins    =  20
i:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/Rbins    =  1
i:Ge/PhaseVol_Z3.0218_0.1125_1_R0_6_1/PhiBins    =  1

s:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/Surface                     = "PhaseVol_Z3.1343_0.2345_1_R0_6_1/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/OutputFile                  = "PhaseSpASCII_Z3.1343_0.2345_1_R0_6_1"
i:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/OutputBufferSize            = 1000
# s:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol_Z3.1343_0.2345_1_R0_6_1/OutputAfterRun              = "True"
s:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/Parent     = "World"
s:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/Type       =  "TsCylinder"
s:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/Material   = "G4_WATER"
d:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/Rmin =  0 cm
d:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/Rmax = 6 cm
d:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/HL = 0.11725 cm
d:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/Sphi     = 0 deg
d:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/Dphi     = 360 deg
d:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/TransX   =  0 cm
d:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/TransY   =  0 cm
d:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/TransZ   =  -3.25155 cm
d:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/RotX     = 0 deg
d:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/RotY     =  0 deg
d:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/RotZ     = 0 deg
s:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/Color    = "blue"
i:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/Zbins    =  7
i:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/Rbins    =  1
i:Ge/PhaseVol_Z3.1343_0.2345_1_R0_6_1/PhiBins    =  1

s:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/Surface                     = "PhaseVol_Z3.3688_2.9078_1_R0_6_1/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/OutputFile                  = "PhaseSpASCII_Z3.3688_2.9078_1_R0_6_1"
i:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/OutputBufferSize            = 1000
# s:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol_Z3.3688_2.9078_1_R0_6_1/OutputAfterRun              = "True"
s:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/Parent     = "World"
s:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/Type       =  "TsCylinder"
s:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/Material   = "G4_WATER"
d:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/Rmin =  0 cm
d:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/Rmax = 6 cm
d:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/HL = 1.4539 cm
d:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/Sphi     = 0 deg
d:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/Dphi     = 360 deg
d:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/TransX   =  0 cm
d:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/TransY   =  0 cm
d:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/TransZ   =  -4.8227 cm
d:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/RotX     = 0 deg
d:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/RotY     =  0 deg
d:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/RotZ     = 0 deg
s:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/Color    = "blue"
i:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/Zbins    =  7
i:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/Rbins    =  1
i:Ge/PhaseVol_Z3.3688_2.9078_1_R0_6_1/PhiBins    =  1

